PsychoPy2experiment version="2024.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1024, 768]
  expName = door-heatpain-gui
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine titleScreen
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = img/title.jpg
      saveStartStop = False
      size = (1024, 768)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import random
        def randomGet(start,end):
            return random.uniform(start, end)
      End Routine:
        trials_12.addData('sdan','')
        trials_12.addData('session','')
        trials_12.addData('version','')
        trials_12.addData('date','')
        trials_12.addData('section','title screen displayed')
        trials_12.addData('displayed','')
        trials_12.addData('vas_label','')
        trials_12.addData('vas_response','')
        trials_12.addData('door(r)','')
        trials_12.addData('door(p)','')
        trials_12.addData('door_locked_level','')
        trials_12.addData('award type','')
        trials_12.addData('award','')
        trials_12.addData('door duration (sec)','')
        trials_12.addData('door anticipation time (sec)','')
        trials_12.addData('award displayed duration (sec)','')
        trials_12.addData('iti duration (sec)','')
  Routine trials
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Flow
  LoopInitiator trials_12 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine titleScreen
  LoopTerminator trials_12
