PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['sdan'], expName, expInfo['date'])
  Experiment info = {'sdan': '', 'session': '001', 'version': '1'}
  Force stereo = False
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['instruction/end_slide.jpg', 'instruction/finish_1.30.20.JPG', 'instruction/practice_inst.jpg', 'instruction/practice_inst2.jpg', 'instruction/practice_start.jpg', 'instruction/ratings.jpg', 'instruction/rest_slide.jpg', 'instruction/Slide0.jpg', 'instruction/Slide1.jpg', 'instruction/Slide2.jpg', 'instruction/Slide3.jpg', 'instruction/Slide4.jpg', 'instruction/Slide5.jpg', 'instruction/Slide6.jpg', 'instruction/Slide7.jpg', 'instruction/Slide8.jpg', 'instruction/Slide9.jpg', 'instruction/Slide10.jpg', 'instruction/Slide11.jpg', 'instruction/Slide12.jpg', 'instruction/Slide13.jpg', 'instruction/Slide14.jpg', 'instruction/Slide15.jpg', 'instruction/Slide16.jpg', 'instruction/start_main_game.jpg', 'instruction/start_task.jpg', 'video/16.mp4', 'video/16b.mp4', 'video/18.mp4', 'sound/punishment.wav', 'sound/reward.wav', 'img/outcomes/1_punishment.jpg', 'img/outcomes/1_reward.jpg', 'img/outcomes/2_punishment.jpg', 'img/outcomes/2_reward.jpg', 'img/outcomes/3_punishment.jpg', 'img/outcomes/3_reward.jpg', 'img/outcomes/4_punishment.jpg', 'img/outcomes/4_reward.jpg', 'img/outcomes/5_punishment.jpg', 'img/outcomes/5_reward.jpg', 'img/outcomes/6_punishment.jpg', 'img/outcomes/6_reward.jpg', 'img/outcomes/7_punishment.jpg', 'img/outcomes/7_reward.jpg', 'img/doors2/p1r1.jpg', 'img/doors2/p1r2.jpg', 'img/doors2/p1r3.jpg', 'img/doors2/p1r4.jpg', 'img/doors2/p1r5.jpg', 'img/doors2/p1r6.jpg', 'img/doors2/p1r7.jpg', 'img/doors2/p2r1.jpg', 'img/doors2/p2r2.jpg', 'img/doors2/p2r3.jpg', 'img/doors2/p2r4.jpg', 'img/doors2/p2r5.jpg', 'img/doors2/p2r6.jpg', 'img/doors2/p2r7.jpg', 'img/doors2/p3r1.jpg', 'img/doors2/p3r2.jpg', 'img/doors2/p3r3.jpg', 'img/doors2/p3r4.jpg', 'img/doors2/p3r5.jpg', 'img/doors2/p3r6.jpg', 'img/doors2/p3r7.jpg', 'img/doors2/p4r1.jpg', 'img/doors2/p4r2.jpg', 'img/doors2/p4r3.jpg', 'img/doors2/p4r4.jpg', 'img/doors2/p4r5.jpg', 'img/doors2/p4r6.jpg', 'img/doors2/p4r7.jpg', 'img/doors2/p5r1.jpg', 'img/doors2/p5r2.jpg', 'img/doors2/p5r3.jpg', 'img/doors2/p5r4.jpg', 'img/doors2/p5r5.jpg', 'img/doors2/p5r6.jpg', 'img/doors2/p5r7.jpg', 'img/doors2/p6r1.jpg', 'img/doors2/p6r2.jpg', 'img/doors2/p6r3.jpg', 'img/doors2/p6r4.jpg', 'img/doors2/p6r5.jpg', 'img/doors2/p6r6.jpg', 'img/doors2/p6r7.jpg', 'img/doors2/p7r1.jpg', 'img/doors2/p7r2.jpg', 'img/doors2/p7r3.jpg', 'img/doors2/p7r4.jpg', 'img/doors2/p7r5.jpg', 'img/doors2/p7r6.jpg', 'img/doors2/p7r7.jpg', 'img/doors1/p1r1.jpg', 'img/doors1/p1r2.jpg', 'img/doors1/p1r3.jpg', 'img/doors1/p1r4.jpg', 'img/doors1/p1r5.jpg', 'img/doors1/p1r6.jpg', 'img/doors1/p1r7.jpg', 'img/doors1/p2r1.jpg', 'img/doors1/p2r2.jpg', 'img/doors1/p2r3.jpg', 'img/doors1/p2r4.jpg', 'img/doors1/p2r5.jpg', 'img/doors1/p2r6.jpg', 'img/doors1/p2r7.jpg', 'img/doors1/p3r1.jpg', 'img/doors1/p3r2.jpg', 'img/doors1/p3r3.jpg', 'img/doors1/p3r4.jpg', 'img/doors1/p3r5.jpg', 'img/doors1/p3r6.jpg', 'img/doors1/p3r7.jpg', 'img/doors1/p4r1.jpg', 'img/doors1/p4r2.jpg', 'img/doors1/p4r3.jpg', 'img/doors1/p4r4.jpg', 'img/doors1/p4r5.jpg', 'img/doors1/p4r6.jpg', 'img/doors1/p4r7.jpg', 'img/doors1/p5r1.jpg', 'img/doors1/p5r2.jpg', 'img/doors1/p5r3.jpg', 'img/doors1/p5r4.jpg', 'img/doors1/p5r5.jpg', 'img/doors1/p5r6.jpg', 'img/doors1/p5r7.jpg', 'img/doors1/p6r1.jpg', 'img/doors1/p6r2.jpg', 'img/doors1/p6r3.jpg', 'img/doors1/p6r4.jpg', 'img/doors1/p6r5.jpg', 'img/doors1/p6r6.jpg', 'img/doors1/p6r7.jpg', 'img/doors1/p7r1.jpg', 'img/doors1/p7r2.jpg', 'img/doors1/p7r3.jpg', 'img/doors1/p7r4.jpg', 'img/doors1/p7r5.jpg', 'img/doors1/p7r6.jpg', 'img/doors1/p7r7.jpg', 'img/after_VAS.jpg', 'img/finalReward.jpg', 'img/fortuneResult16.jpg', 'img/fortuneResult18.jpg', 'img/iti.jpg', 'img/practice_door.jpg', 'img/practice_outcome.jpg', 'img/rest.jpg', 'img/start_main_game.jpg', 'img/title.jpg', 'img/VASCheck.jpg']
  Screen = 1
  Units = height
  Use version = 2021.1.4
  Window size (pixels) = [1024,768]
  color = $[-1,-1,-1]
  expName = door
  logging level = debug
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Routines
  Routine titleScreen
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = img/title.jpg
      saveStartStop = False
      size = (1024, 768)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_6
      Code Type = Py
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      Begin Experiment:
        import random
        def randomGet(start,end):
            return random.uniform(start, end)
      End Routine:
        trials_12.addData('sdan','')
        trials_12.addData('session','')
        trials_12.addData('version','')
        trials_12.addData('date','')
        trials_12.addData('section','title screen displayed')
        trials_12.addData('displayed','')
        trials_12.addData('vas_label','')
        trials_12.addData('vas_response','')
        trials_12.addData('door(r)','')
        trials_12.addData('door(p)','')
        trials_12.addData('door_locked_level','')
        trials_12.addData('award type','')
        trials_12.addData('award','')
        trials_12.addData('door duration (sec)','')
        trials_12.addData('door anticipation time (sec)','')
        trials_12.addData('award displayed duration (sec)','')
        trials_12.addData('iti duration (sec)','')
  Routine instruction
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        count = 0
        imgFile = 'instruction/Slide' + str(count) + '.jpg'
      Begin Routine:
        imgFile = 'instruction/Slide' + str(count) + '.jpg'
      End Routine:
        trials_2.addData('section','Instruction (page:' + str(count)+')')
        trials_2.addData('displayed',imgFile)
        if count == 0:
            if (key_resp_2.keys) == 'y' or (key_resp_2.keys) == 'Y':
                count += 1
            elif (key_resp_2.keys) == 'n' or (key_resp_2.keys) == 'N':
                trials_2.finished=True
        elif count==16:
            if (key_resp_2.keys) == 'r' or (key_resp_2.keys) == 'R':
                count=1
            else:
                trials_2.finished=True
        else:
            if key_resp_2.keys == 'space':
                count+=1
    KeyboardComponent key_resp_2
      allowedKeys = 'space','r','y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $imgFile
      saveStartStop = False
      size = (1024, 768)
      startVal [time (s)] = 0.0
      units = pix
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  Routine practice
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        level = 50
        width = widthBank[level]
        height = heightBank[level]
        img = visual.ImageStim(win=win, image="img/practice_door.jpg", units="pix", size=(width, height))
      Begin Routine:
        img.setAutoDraw(False);
        width = widthBank[level]
        height = heightBank[level]
        img.size = [width,height]
        #img.size = (1024,768)
        level = 50
        img.setAutoDraw(True);

        practiceTrialStartTime = timer.getTime()
        #print(timer.getTime())
      Each Frame:
        #print("left:")
        #print(mouse.getPressed()[0])
        #print("right:")
        #print(mouse.getPressed()[2])
        #print(str(mouse.getPressed()[0])+','+str(mouse.getPressed()[2]))
        #if mouse.getPressed()[0] == 1:
        #    level += 1
        #    level = min(100,level)
        #if mouse.getPressed()[2] == 1:
        #    level -= 1
        #    level = max(0,level)
        #print(level)

        if timer.getTime() - practiceTrialStartTime > 10:
        #    trials.finished=True
            finalWidth = width
            finalHeight = height
            continueRoutine = False

        if mouse.getPressed()[0] == 1:
            level += 1
            level = min(100,level)
        elif mouse.getPressed()[2] == 1:
            level -= 1
            level = max(0,level)
        #print(level)
        img.setAutoDraw(False);
        #img.setSize((img.size[0]*level/50,img.size[1]*level/50))
        width = widthBank[level]
        height = heightBank[level]
        #img.size = (1024*level/50,768*level/50)
        img.size = [width,height]
        img.setAutoDraw(True);
      End Experiment:
        level = 50
      End Routine:
        trials_3.addData('door locked level', level)
        trials_3.addData('door duration (sec)',str(timer.getTime() - practiceTrialStartTime))
        trials_3.addData('displayed',"img/practice_door.jpg")
        width = widthBank[level]
        height = heightBank[level]

        randomDuration = randomGet(1.5, 3.5)
        randomAnticipation = randomGet(2, 4)
    CodeComponent code_3
      Code Type = Py
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      Before Experiment:
        timer = core.Clock()
        widthBank = []
        heightBank = []
        size_diff = 1/65
        for level1 in range(0,101):
            width = 1024 * (0.1 + pow(level1,1.7) * size_diff*0.05)
            height = 768 * (0.1 + pow(level1,1.7) * size_diff*0.05)
            widthBank.append(width)
            heightBank.append(height)
  Routine vasText1
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
      wrapWidth = 3
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      text:
        Before we continue, please answer a few questions.

        Press the spacebar to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = randomDuration
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  Routine preInstruction
    KeyboardComponent key_resp_6
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        message = visual.TextStim(win, text="Do you want to see the instruction?\n\n(y: Yes, n: No)",units='norm', wrapWidth=3)
      Begin Routine:
        message.setAutoDraw(False);
        message.setAutoDraw(True);
  Routine fortuneWheel
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = False
      movie [set every repeat] = $fortuneVideo
      saveStartStop = False
      size = (366,457)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
      units = pix
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    CodeComponent code_init
      Code Type = Auto->JS
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      Begin Experiment:
        trialsCount = 0
        fortuneVideo = 'video/18.mp4'
      End Routine:
        if trialsCount == 0:
            fortuneVideo = 'video/16.mp4'
        elif trialsCount == 1:
            fortuneVideo = 'video/16b.mp4'
    CodeComponent code_fortuneWheelResult
      Code Type = Auto->JS
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      Begin Experiment:
        fortuneWheelResultImg = 'img/fortuneResult18.jpg'
      End Routine:
        trials_5.addData('section','Playing Fortune Wheel')
        trials_5.addData('displayed',fortuneVideo)


        if trialsCount == 0:
            fortuneWheelResultImg = 'img/fortuneResult18.jpg'
        elif trialsCount == 1:
            fortuneWheelResultImg = 'img/fortuneResult16.jpg'
        elif trialsCount == 2:
            fortuneWheelResultImg = 'img/fortuneResult16.jpg'
  Routine practiceAward
    ImageComponent imgAward
      image = img/practice_outcome.jpg
      pos [set every repeat] = (0, -height * 0.028)
      saveStartStop = False
      size [set every repeat] = (width* 0.235, height* 0.464)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        routineStartTime = timer.getTime()
      End Routine:
        trials_3.addData('award displayed duration (sec)',str(timer.getTime() - routineStartTime))
  Routine practiceITI
    ImageComponent imageITI
      image = img/iti.jpg
      saveStartStop = False
      size = (1024, 768)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = randomDuration
      units = pix
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        img.setAutoDraw(False)
        imgAward.setAutoDraw(False)
        routineStartTime = timer.getTime()
      End Routine:
        trials_3.addData('iti duration (sec)',str(timer.getTime() - routineStartTime))
        trials_3.addData('section','Practice')
  Routine door
    MouseComponent mouse_2
      forceEndRoutineOnPress = never
      saveMouseState = final
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        level = 50
        width = widthBank[level]
        height = heightBank[level]
        imgDoor = visual.ImageStim(win=win, image="img/doors1/p1r1.jpg", units="pix", size=(width, height))
      Begin Routine:
        level = 50
        width = widthBank[level]
        height = heightBank[level]
        imgDoor = visual.ImageStim(win=win, image=doorImg, units="pix", size=(width, height))
        imgDoor.setAutoDraw(False);
        img.size = [width,height]
        imgDoor.setAutoDraw(True);

        doorTrialStartTime = timer.getTime()
        #print(timer.getTime())
      Each Frame:
        if timer.getTime() - doorTrialStartTime > 10:
            finalWidth = width
            finalHeight = height
            continueRoutine = False

        if mouse.getPressed()[0] == 1:
            level += 1
            level = min(100,level)
        elif mouse.getPressed()[2] == 1:
            level -= 1
            level = max(0,level)

        img.setAutoDraw(False);
        width = widthBank[level]
        height = heightBank[level]
        imgDoor.size = [width,height]
        imgDoor.setAutoDraw(True);
      End Experiment:
        level = 50
      End Routine:
        trials_4.addData('door locked level', level)
        trials_4.addData('door duration (sec)',str(timer.getTime() - doorTrialStartTime))

        width = widthBank[level]
        height = heightBank[level]

        randomDuration = randomGet(1.5, 3.5)
  Routine award
    ImageComponent image_door_award
      image [set every repeat] = $awardImg
      pos [set every repeat] = (0, -height * 0.028)
      saveStartStop = False
      size [set every repeat] = (width * 0.235, height * 0.464)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      units = pix
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        #print(door_opened)
        #print(awardImg)
        if door_opened == True:
            routineStartTime = timer.getTime()
        #    print(continueRoutine)
        else:
            continueRoutine = False
      End Routine:
        if door_opened == True:
            trials_4.addData(awardImg + ' displayed duration (sec)',str(timer.getTime() - routineStartTime))
    SoundComponent sound_1
      saveStartStop = False
      sound [set every repeat] = $soundFile
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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  Routine iti
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        imgDoor.setAutoDraw(False)
        image_door_award.setAutoDraw(False)
        routineStartTime = timer.getTime()
      End Routine:
        trials_4.addData('section','Door Game (playing main game)')
        trials4Count += 1
        trials_4.addData('iti duration (sec)',str(timer.getTime() - routineStartTime))
    ImageComponent image_5
      image = img/iti.jpg
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = randomDuration
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  Routine restScreen
    ImageComponent image_6
      image = img/rest.jpg
      saveStartStop = False
      size = (1024,768)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_18
      Code Type = Auto->JS
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      End Routine:
        trials_9.addData('section','Rest Screen Displayed')
        trials_9.addData('displayed','img/rest.jpg')
        vasPreCount = 0
        vasQuestionText = "How anxious do you feel right now?"
        vasLabelText1 = 'Not anxious'
        vasLabelText2 = 'Very anxious'
  Routine fortuneWheelResult
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image [set every repeat] = $fortuneWheelResultImg
      size = (1024, 768)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_22
      Code Type = Auto->JS
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      End Routine:
        trials_7.addData('section','Fortune Wheel Result displayed')
        trials_7.addData('displayed',fortuneWheelResultImg)
  Routine doorStartScreen
    ImageComponent image_4
      image = img/start_main_game.jpg
      saveStartStop = False
      size = (1024,768)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_23
      Code Type = Auto->JS
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      End Routine:
        trials_8.addData('section','Doorgame Start Screen Displayed')
        trials_8.addData('displayed','img/start_main_game.jpg')
  Routine doorImgShuffle
    CodeComponent code_imgs
      Code Type = Auto->JS
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      Begin Experiment:
        level = 50
        width = widthBank[level]
        height = heightBank[level]

        doorOpenChanceMap = [0.007, 0.008, 0.009, 0.011, 0.012, 0.014, 0.016, 0.018, 0.02 ,
               0.023, 0.026, 0.029, 0.032, 0.036, 0.04 , 0.045, 0.049, 0.055,
               0.061, 0.067, 0.074, 0.081, 0.089, 0.097, 0.106, 0.115, 0.125,
               0.136, 0.147, 0.159, 0.171, 0.184, 0.198, 0.212, 0.227, 0.242,
               0.258, 0.274, 0.291, 0.309, 0.326, 0.345, 0.363, 0.382, 0.401,
               0.421, 0.44 , 0.46 , 0.48 , 0.5  , 0.52 , 0.54 , 0.56 , 0.579,
               0.599, 0.618, 0.637, 0.655, 0.674, 0.691, 0.709, 0.726, 0.742,
               0.758, 0.773, 0.788, 0.802, 0.816, 0.829, 0.841, 0.853, 0.864,
               0.875, 0.885, 0.894, 0.903, 0.911, 0.919, 0.926, 0.933, 0.939,
               0.945, 0.951, 0.955, 0.96 , 0.964, 0.968, 0.971, 0.974, 0.977,
               0.98 , 0.982, 0.984, 0.986, 0.988, 0.989, 0.991, 0.992, 0.993,
               0.994, 1.   ]

        if expInfo['version'] == 1:
            imgDir = 'img/doors1/'
            imgList = ['img/doors1/p6r3.jpg', 'img/doors1/p4r1.jpg', 'img/doors1/p2r7.jpg', 'img/doors1/p2r6.jpg', 'img/doors1/p6r2.jpg', 'img/doors1/p4r2.jpg', 'img/doors1/p2r4.jpg', 'img/doors1/p2r5.jpg', 'img/doors1/p4r3.jpg', 'img/doors1/p6r1.jpg', 'img/doors1/p6r5.jpg', 'img/doors1/p4r7.jpg', 'img/doors1/p2r1.jpg', 'img/doors1/p4r6.jpg', 'img/doors1/p6r4.jpg', 'img/doors1/p6r6.jpg', 'img/doors1/p4r4.jpg', 'img/doors1/p2r2.jpg', 'img/doors1/p2r3.jpg', 'img/doors1/p4r5.jpg', 'img/doors1/p6r7.jpg', 'img/doors1/p1r6.jpg', 'img/doors1/p3r4.jpg', 'img/doors1/p5r2.jpg', 'img/doors1/p7r1.jpg', 'img/doors1/p5r3.jpg', 'img/doors1/p3r5.jpg', 'img/doors1/p1r7.jpg', 'img/doors1/p1r5.jpg', 'img/doors1/p3r7.jpg', 'img/doors1/p5r1.jpg', 'img/doors1/p7r3.jpg', 'img/doors1/p7r2.jpg', 'img/doors1/p3r6.jpg', 'img/doors1/p1r4.jpg', 'img/doors1/p3r2.jpg', 'img/doors1/p5r4.jpg', 'img/doors1/p7r6.jpg', 'img/doors1/p7r7.jpg', 'img/doors1/p5r5.jpg', 'img/doors1/p3r3.jpg', 'img/doors1/p1r1.jpg', 'img/doors1/p1r3.jpg', 'img/doors1/p3r1.jpg', 'img/doors1/p5r7.jpg', 'img/doors1/p7r5.jpg', 'img/doors1/p7r4.jpg', 'img/doors1/p5r6.jpg', 'img/doors1/p1r2.jpg']
            pList = ['6', '4', '2', '2', '6', '4', '2', '2', '4', '6', '6', '4', '2', '4', '6', '6', '4', '2', '2', '4', '6', '1', '3', '5', '7', '5', '3', '1', '1', '3', '5', '7', '7', '3', '1', '3', '5', '7', '7', '5', '3', '1', '1', '3', '5', '7', '7', '5', '1']
            rList = ['3', '1', '7', '6', '2', '2', '4', '5', '3', '1', '5', '7', '1', '6', '4', '6', '4', '2', '3', '5', '7', '6', '4', '2', '1', '3', '5', '7', '5', '7', '1', '3', '2', '6', '4', '2', '4', '6', '7', '5', '3', '1', '3', '1', '7', '5', '4', '6', '2']
        else:
            imgDir = 'img/doors2/'
            imgList = ['img/doors2/p6r3.jpg', 'img/doors2/p4r1.jpg', 'img/doors2/p2r7.jpg', 'img/doors2/p2r6.jpg', 'img/doors2/p6r2.jpg', 'img/doors2/p4r2.jpg', 'img/doors2/p2r4.jpg', 'img/doors2/p2r5.jpg', 'img/doors2/p4r3.jpg', 'img/doors2/p6r1.jpg', 'img/doors2/p6r5.jpg', 'img/doors2/p4r7.jpg', 'img/doors2/p2r1.jpg', 'img/doors2/p4r6.jpg', 'img/doors2/p6r4.jpg', 'img/doors2/p6r6.jpg', 'img/doors2/p4r4.jpg', 'img/doors2/p2r2.jpg', 'img/doors2/p2r3.jpg', 'img/doors2/p4r5.jpg', 'img/doors2/p6r7.jpg', 'img/doors2/p1r6.jpg', 'img/doors2/p3r4.jpg', 'img/doors2/p5r2.jpg', 'img/doors2/p7r1.jpg', 'img/doors2/p5r3.jpg', 'img/doors2/p3r5.jpg', 'img/doors2/p1r7.jpg', 'img/doors2/p1r5.jpg', 'img/doors2/p3r7.jpg', 'img/doors2/p5r1.jpg', 'img/doors2/p7r3.jpg', 'img/doors2/p7r2.jpg', 'img/doors2/p3r6.jpg', 'img/doors2/p1r4.jpg', 'img/doors2/p3r2.jpg', 'img/doors2/p5r4.jpg', 'img/doors2/p7r6.jpg', 'img/doors2/p7r7.jpg', 'img/doors2/p5r5.jpg', 'img/doors2/p3r3.jpg', 'img/doors2/p1r1.jpg', 'img/doors2/p1r3.jpg', 'img/doors2/p3r1.jpg', 'img/doors2/p5r7.jpg', 'img/doors2/p7r5.jpg', 'img/doors2/p7r4.jpg', 'img/doors2/p5r6.jpg', 'img/doors2/p1r2.jpg']
            pList = ['6', '4', '2', '2', '6', '4', '2', '2', '4', '6', '6', '4', '2', '4', '6', '6', '4', '2', '2', '4', '6', '1', '3', '5', '7', '5', '3', '1', '1', '3', '5', '7', '7', '3', '1', '3', '5', '7', '7', '5', '3', '1', '1', '3', '5', '7', '7', '5', '1']
            rList = ['3', '1', '7', '6', '2', '2', '4', '5', '3', '1', '5', '7', '1', '6', '4', '6', '4', '2', '3', '5', '7', '6', '4', '2', '1', '3', '5', '7', '5', '7', '1', '3', '2', '6', '4', '2', '4', '6', '7', '5', '3', '1', '3', '1', '7', '5', '4', '6', '2']
      End Routine:
        trials4Count = 0
    CodeComponent code_shuffle
      Code Type = Py
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      Begin Experiment:
        def shuffle(array):
            import random
            random.shuffle(array)
      Begin Routine:
        imgOrder = [0, 1, 2, 3, 4, 5, 6, 7, 8, 9, 10, 11, 12, 13, 14, 15, 16, 17, 18, 19, 20]
        shuffle(imgOrder)
        #continueRoutine = False
  Routine practiceAnticipation
    KeyboardComponent key_resp_9
      allowedKeys = 'qq'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        routineStartTime = timer.getTime()
      Each Frame:
        if timer.getTime() - routineStartTime > randomAnticipation:
            continueRoutine = False
      End Routine:
        trials_3.addData('door anticipation time (sec)',str(timer.getTime() - routineStartTime))
  Routine doorAnticipation
    KeyboardComponent key_resp_10
      allowedKeys = 'qq'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        routineStartTime = timer.getTime()

        doorOpenChance = doorOpenChanceMap[level]
        randomNum = randomGet(0,1)
        door_opened = False
        soundFile = 'sound/reward.wav'

        if randomNum > doorOpenChance:
            door_opened = False
            trials_4.addData('award type','door not opened')
            trials_4.addData('award','0')
        else:
            door_opened = True
        if randomGet(0,1) > 0.5:
            rewardVSpunishment = "punishment"
            awardImg = "img/outcomes/" + p + "_punishment.jpg"
            soundFile = 'sound/punishment.wav'
            trials_4.addData('award type',"punishment")
            trials_4.addData('award','-'+p)
        else:
            rewardVSpunishment = "reward"
            awardImg = "img/outcomes/" + r + "_reward.jpg"
            trials_4.addData('award type',"reward")
            trials_4.addData('award','+'+r)
      Each Frame:
        if timer.getTime() - routineStartTime > randomAnticipation:
            continueRoutine = False
      End Routine:
        trials_4.addData('door anticipation time (sec)',str(timer.getTime() - routineStartTime))
    CodeComponent code_random_award
      Code Type = Auto->JS
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      Begin Experiment:
        awardImg = "./img/outcomes/1_punishment.jpg"
        rewardVSpunishment = "punishment"
  Routine noAward
    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        if door_opened == False:
            routineStartTime = timer.getTime()
        else:
            continueRoutine = True
      Each Frame:
        if timer.getTime() - routineStartTime > 2:
           continueRoutine = True
      End Routine:
        if door_opened == False:
            trials_4.addData('award (not displayed) displayed duration (sec)',str(timer.getTime() - routineStartTime))
  Routine doorInit
    CodeComponent code_16
      Code Type = Auto->JS
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      End Routine:
        doorImgIdx = imgOrder[trials4Count]
        doorImg = imgList[doorImgIdx]
        p = pList[doorImgIdx]
        r = rList[doorImgIdx]
        #imgList = ['./img/doors1/p6r3.jpg', './img/doors1/p4r1.jpg', './img/doors1/p2r7.jpg', './img/doors1/p2r6.jpg', './img/doors1/p6r2.jpg', './img/doors1/p4r2.jpg', './img/doors1/p2r4.jpg', './img/doors1/p2r5.jpg', './img/doors1/p4r3.jpg', './img/doors1/p6r1.jpg', './img/doors1/p6r5.jpg', './img/doors1/p4r7.jpg', './img/doors1/p2r1.jpg', './img/doors1/p4r6.jpg', './img/doors1/p6r4.jpg', './img/doors1/p6r6.jpg', './img/doors1/p4r4.jpg', './img/doors1/p2r2.jpg', './img/doors1/p2r3.jpg', './img/doors1/p4r5.jpg', './img/doors1/p6r7.jpg', './img/doors1/p1r6.jpg', './img/doors1/p3r4.jpg', './img/doors1/p5r2.jpg', './img/doors1/p7r1.jpg', './img/doors1/p5r3.jpg', './img/doors1/p3r5.jpg', './img/doors1/p1r7.jpg', './img/doors1/p1r5.jpg', './img/doors1/p3r7.jpg', './img/doors1/p5r1.jpg', './img/doors1/p7r3.jpg', './img/doors1/p7r2.jpg', './img/doors1/p3r6.jpg', './img/doors1/p1r4.jpg', './img/doors1/p3r2.jpg', './img/doors1/p5r4.jpg', './img/doors1/p7r6.jpg', './img/doors1/p7r7.jpg', './img/doors1/p5r5.jpg', './img/doors1/p3r3.jpg', './img/doors1/p1r1.jpg', './img/doors1/p1r3.jpg', './img/doors1/p3r1.jpg', './img/doors1/p5r7.jpg', './img/doors1/p7r5.jpg', './img/doors1/p7r4.jpg', './img/doors1/p5r6.jpg', './img/doors1/p1r2.jpg']
        #    pList = ['6', '4', '2', '2', '6', '4', '2', '2', '4', '6', '6', '4', '2', '4', '6', '6', '4', '2', '2', '4', '6', '1', '3', '5', '7', '5', '3', '1', '1', '3', '5', '7', '7', '3', '1', '3', '5', '7', '7', '5', '3', '1', '1', '3', '5', '7', '7', '5', '1']
        #    rList = ['3', '1', '7', '6', '2', '2', '4', '5', '3', '1', '5', '7', '1', '6', '4', '6', '4', '2', '3', '5', '7', '6', '4', '2', '1', '3', '5', '7', '5', '7', '1', '3', '2', '6', '4', '2', '4', '6', '7', '5', '3', '1', '3', '1', '7', '5', '4', '6', '2']
        #
        randomDuration = randomGet(1.5, 3.5)
        randomAnticipation = randomGet(2, 4)

        trials_4.addData('displayed',doorImg)
        trials_4.addData('door(r)',r)
        trials_4.addData('door(p)',p)
    CodeComponent code_20
      Code Type = JS
      End JS Routine:
        doorImg = doorImg.replace('./', '');
  Routine afterVAS
    ImageComponent image_7
      image = img/after_VAS.jpg
      saveStartStop = False
      size = (1024,768)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        if trialsCount==2:
            continueRoutine = False
      End Routine:
        trialsCount+=1
        trials_10.addData('section','after-VAS screen displayed')
        trials_10.addData('displayed','img/after_VAS.jpg')
  Routine finalReward
    ImageComponent image_8
      image = img/finalReward.jpg
      saveStartStop = False
      size = (1024,768)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code_24
      Code Type = Auto->JS
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      End Routine:
        trials_11.addData('section','final-reward screen displayed')
        trials_11.addData('displayed','img/finalReward.jpg')
  Routine vasPre
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        vasPreCount = 0
        vasQuestionText = "How anxious do you feel right now?"
        vasLabelText1 = 'Not anxious'
        vasLabelText2 = 'Very anxious'
      Begin Routine:
        #print(vasPreCount)
        sliderStarted = False
      Each Frame:
        if slider_2.markerPos:
            sliderStarted = True
      End Routine:
        #print(slider_2.getRating())
        #if slider_2.getRating() != None and slider_2.getRating() != '':
        if sliderStarted:
            trials_13.finished= True
        #if slider_2.status != NOT_STARTED:
    SliderComponent slider_2
      fillColor = Yellow
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (0,100)
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    TextComponent vas_question_pre
      letterHeight = 0.12
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $vasQuestionText
      units = norm
      wrapWidth = 2
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    TextComponent vas_label1_pre
      letterHeight = 20
      pos = (-380, -170)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $vasLabelText1
      units = pix
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    TextComponent vas_label2_pre
      letterHeight = 20
      pos = (380, -170)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $vasLabelText2
      units = pix
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine vas
    SliderComponent slider
      fillColor = Yellow
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (0,100)
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    TextComponent vas_question
      letterHeight = 0.12
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $vasQuestionText
      units = norm
      wrapWidth = 3
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        #print(vasPreCount,vasQuestionText)
        #i
        sliderStarted = False
      Each Frame:
        if slider.markerPos:
            sliderStarted = True
      End Routine:
        #print(slider_2.getRating())
        #if slider.getRating() != None and slider.getRating() != '':
        if sliderStarted:
            trials_14.finished= True

        #if slider.status != NOT_STARTED:
        #    trials_14.finished= True
    TextComponent vas_label1
      letterHeight = 20
      pos = (-380, -170)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $vasLabelText1
      units = pix
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    TextComponent vas_label2
      letterHeight = 20
      pos = (380, -170)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $vasLabelText2
      units = pix
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine outputFileHandling
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        del expInfo['expName']
  Routine dataOrganization
    CodeComponent code_21
      Code Type = Auto->JS
  Routine vasPreRecord
    CodeComponent code_25
      Code Type = Auto->JS
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      End Routine:
        trials_1.addData('displayed', vasQuestionText)
        trials_1.addData('vas_response',slider_2.getRating())
        trials_1.addData('vas_label', vasLabelText1 + ',' + vasLabelText2)
        trials_1.addData('section','VAS')
        if vasPreCount == 0:
            vasLabelText1= 'Not at all'
            vasLabelText2  = 'Very much'
            vasQuestionText = "How much do you feel like taking part in the task?"
        if vasPreCount == 1:
            vasLabelText1 = 'Not at all tired'
            vasLabelText2  = 'Very tired'
            vasQuestionText = "How tired are you right now?"
        if vasPreCount == 2:
            vasLabelText1= 'Worst mood ever'
            vasLabelText2 = 'Best mood ever'
            vasQuestionText = "Think about your mood right now. \nHow would you describe it?"
        vasPreCount +=1
  Routine vasRecord
    CodeComponent code_26
      Code Type = Auto->JS
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      End Routine:
        trials_6.addData('displayed', vasQuestionText)
        trials_6.addData('vas_response',slider.getRating())
        trials_6.addData('vas_label', vasLabelText1 + ',' + vasLabelText2)
        trials_6.addData('section','VAS')
        if vasPreCount == 0:
            vasLabelText1= 'Not at all'
            vasLabelText2  = 'Very much'
            vasQuestionText = "How much do you feel like taking part in the task?"
        elif vasPreCount == 1:
            vasLabelText1 = 'Not at all tired'
            vasLabelText2  = 'Very tired'
            vasQuestionText = "How tired are you right now?"
        elif vasPreCount == 2:
            vasLabelText1= 'Worst mood ever'
            vasLabelText2 = 'Best mood ever'
            vasQuestionText = "Think about your mood right now. \nHow would you describe it?"
        vasPreCount +=1
Flow
  LoopInitiator trials_12 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine titleScreen
  LoopTerminator trials_12
  LoopInitiator trials_1 loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    LoopInitiator trials_13 loopType="TrialHandler"
      loopType = random
      nReps = 1000
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      Routine vasPre
    LoopTerminator trials_13
    Routine vasPreRecord
  LoopTerminator trials_1
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 10000
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    Routine instruction
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine practice
    Routine practiceAnticipation
    Routine practiceAward
    Routine practiceITI
  LoopTerminator trials_3
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator trials_5 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine fortuneWheel
    LoopTerminator trials_5
    LoopInitiator trials_7 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine fortuneWheelResult
    LoopTerminator trials_7
    Routine doorImgShuffle
    LoopInitiator trials_8 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine doorStartScreen
    LoopTerminator trials_8
    LoopInitiator trials_4 loopType="TrialHandler"
      loopType = random
      nReps = 2
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      Routine doorInit
      Routine door
      Routine doorAnticipation
      Routine award
      Routine noAward
      Routine iti
    LoopTerminator trials_4
    LoopInitiator trials_9 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine restScreen
    LoopTerminator trials_9
    LoopInitiator trials_6 loopType="TrialHandler"
      loopType = random
      nReps = 4
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      LoopInitiator trials_14 loopType="TrialHandler"
        loopType = random
        nReps = 1000
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        Routine vas
      LoopTerminator trials_14
      Routine vasRecord
    LoopTerminator trials_6
    LoopInitiator trials_10 loopType="TrialHandler"
      loopType = random
      nReps = 1
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      Routine afterVAS
    LoopTerminator trials_10
  LoopTerminator trials
  LoopInitiator trials_11 loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine finalReward
  LoopTerminator trials_11
