PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = untitled
  logging level = debug
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        # Import developer-defined functions
        import sys,os
        sys.path.append('libs')
        sys.path.insert(1, './src')
        import datetime
        import pandas as pd
        from psychopy import visual,core,event
        from psychopy.hardware import keyboard
        from Helper import Questionplay,waitUserSpace
        from Helper import waitAnyKeys,ResolutionIntialization

        from userInputPlay import userInputPlay
        from VASplay import VASplay
        from InstructionPlay import InstructionPlay
        from PracticeGamePlay import PracticeGamePlay
        from DoorGamePlay import DoorGamePlay
        from FortuneGamePlay import FortuneGamePlay
        # from psychopy import parallel
        from psychopy import prefs

        img = visual.ImageStim(win=win, image="./img/ITI_fixation.jpg", units="pix", opacity=1, size=(1024,768))
        img.draw()
        win.flip()
        waitAnyKeys()
Flow
  Routine trial
